PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = cntracs_wm
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Routines
  Routine dynamic_fixation
    ImageComponent fixImage
      image [set every repeat] = $fixFilename
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 1
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    CodeComponent code_2
      Code Type = Auto->JS
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  Routine trial
    CodeComponent HideCursor
      Code Type = Auto->JS
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    PolygonComponent centralFixation
      durationEstim = 2.0
      fillColor = $[0,0,0]
      lineColor = $[0.5,0.5,0.5]
      lineWidth = 2
      shape = rectangle
      size [set every repeat] = [fixSize,fixSize]
      startVal [time (s)] = 0
      stopVal [duration (s)] = $preProbeDuration
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    PolygonComponent stim1
      durationEstim = 0.5
      fillColor [set every repeat] = $stim1_color
      lineColor [set every repeat] = $stim1_color
      ori [set every repeat] = $stim1_orientation
      pos [set every repeat] = [stim1_x, stim1_y]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimWidth,stimHeight]
      startEstim = 0.5
      startVal [time (s)] = $fixDuration
      stopVal [duration (s)] = $stimDuration
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    PolygonComponent stim2
      durationEstim = 0.5
      fillColor [set every repeat] = $stim2_color
      lineColor [set every repeat] = $stim2_color
      ori [set every repeat] = $stim2_orientation
      pos [set every repeat] = [stim2_x,stim2_y]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimWidth,stimHeight]
      startEstim = 0.5
      startVal [time (s)] = $fixDuration
      stopVal [duration (s)] = $stimDuration
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    PolygonComponent stim3
      durationEstim = 0.5
      fillColor [set every repeat] = $stim3_color
      lineColor [set every repeat] = $stim3_color
      ori [set every repeat] = $stim3_orientation
      pos [set every repeat] = [stim3_x,stim3_y]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimWidth,stimHeight]
      startEstim = 0.5
      startVal [time (s)] = $fixDuration
      stopVal [duration (s)] = $stimDuration
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    PolygonComponent stim4
      durationEstim = 0.5
      fillColor [set every repeat] = $stim4_color
      lineColor [set every repeat] = $stim4_color
      ori [set every repeat] = $stim4_orientation
      pos [set every repeat] = [stim4_x,stim4_y]
      shape = rectangle
      size [set every repeat] = [stimWidth,stimHeight]
      startEstim = 0.5
      startVal [time (s)] = $fixDuration
      stopVal [duration (s)] = $stimDuration
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    PolygonComponent stim5
      durationEstim = 0.5
      fillColor [set every repeat] = $stim5_color
      lineColor [set every repeat] = $stim5_color
      ori [set every repeat] = $stim5_orientation
      pos [set every repeat] = [stim5_x,stim5_y]
      shape = rectangle
      size [set every repeat] = [stimWidth,stimHeight]
      startEstim = 0.5
      startVal [time (s)] = $fixDuration
      stopVal [duration (s)] = $stimDuration
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  Routine startBlock
    CodeComponent codeBegin
      Code Type = JS
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      Begin JS Experiment:
        firstTrial = 0;
        trialsPerBlock = 40;
      Begin JS Routine:
        currentBlockRows = ((firstTrial.toString() + ":") + ((firstTrial + trialsPerBlock) - 1).toString());
        firstTrial = (firstTrial + trialsPerBlock);
        document.body.style.cursor='none';
    TextComponent clickToBegin
      letterHeight [set every repeat] = $fontSize
      startVal [time (s)] = 0.0
      text = When you are ready, click the mouse to begin the task.
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    MouseComponent mouseToStartBlock
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine fixPrepare
    PolygonComponent centralFixation_Long
      durationEstim = 0.5
      fillColor = $[0,0,0]
      lineColor = $[0.5,0.5,0.5]
      lineWidth = 2
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $[fixSize,fixSize]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDuration
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  Routine ITI
    StaticComponent ISI
      durationEstim = 1.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $durITI
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  Routine response
    CodeComponent ShowCursor
      Code Type = Auto->JS
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    PolygonComponent respRing
      fillColor = $[0,0,0]
      lineColor = $[-1.000,-1.000,-1.000]
      nVertices = 100
      shape = regular polygon...
      size [set every repeat] = [stimRadius*2,stimRadius*2]
      startVal [time (s)] = 0.0
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    PolygonComponent probe
      fillColor [set every repeat] = $stim1_color
      lineColor [set every repeat] = $stim1_color
      nVertices = 100
      shape = regular polygon...
      size [set every repeat] = [fixSize*2,fixSize*2]
      startVal [time (s)] = 0.0
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    MouseComponent mouseResponse
      clickable = pos0,pos5,pos10,pos15,pos20,pos25,pos30,pos35,pos40,pos45,pos50,pos55,pos60,pos65,pos70,pos75,pos80,pos85,pos90,pos95
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent pos0
      fillColor = $[1,1,1]
      opacity = 0
      pos [set every repeat] = [pos0_x,pos0_y]
      shape = rectangle
      size [set every repeat] = [stimHeight*2,stimHeight*2]
      startVal [time (s)] = 0.0
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    PolygonComponent pos5
      fillColor = $[1,1,1]
      opacity = 0
      ori = 3.6*5
      pos [set every repeat] = [pos5_x,pos5_y]
      shape = rectangle
      size [set every repeat] = [stimHeight*2,stimHeight*2]
      startVal [time (s)] = 0.0
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    PolygonComponent pos10
      fillColor = $[1,1,1]
      opacity = 0
      ori = 3.6*10
      pos [set every repeat] = [pos10_x,pos10_y]
      shape = rectangle
      size [set every repeat] = [stimHeight*2,stimHeight*2]
      startVal [time (s)] = 0.0
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    PolygonComponent pos15
      fillColor = $[1,1,1]
      opacity = 0
      ori = 3.6*15
      pos [set every repeat] = [pos15_x,pos15_y]
      shape = rectangle
      size [set every repeat] = [stimHeight*2,stimHeight*2]
      startVal [time (s)] = 0.0
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    PolygonComponent pos20
      fillColor = $[1,1,1]
      opacity = 0
      ori = 3.6*20
      pos [set every repeat] = [pos20_x,pos20_y]
      shape = rectangle
      size [set every repeat] = [stimHeight*2,stimHeight*2]
      startVal [time (s)] = 0.0
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    PolygonComponent pos25
      fillColor = $[1,1,1]
      opacity = 0
      ori = 3.6*25
      pos [set every repeat] = [pos25_x,pos25_y]
      shape = rectangle
      size [set every repeat] = [stimHeight*2,stimHeight*2]
      startVal [time (s)] = 0.0
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    PolygonComponent pos30
      fillColor = $[1,1,1]
      opacity = 0
      ori = 3.6*30
      pos [set every repeat] = [pos30_x,pos30_y]
      shape = rectangle
      size [set every repeat] = [stimHeight*2,stimHeight*2]
      startVal [time (s)] = 0.0
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    PolygonComponent pos35
      fillColor = $[1,1,1]
      opacity = 0
      ori = 3.6*35
      pos [set every repeat] = [pos35_x,pos35_y]
      shape = rectangle
      size [set every repeat] = [stimHeight*2,stimHeight*2]
      startVal [time (s)] = 0.0
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    PolygonComponent pos40
      fillColor = $[1,1,1]
      opacity = 0
      ori = 3.6*40
      pos [set every repeat] = [pos40_x,pos40_y]
      shape = rectangle
      size [set every repeat] = [stimHeight*2,stimHeight*2]
      startVal [time (s)] = 0.0
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    PolygonComponent pos45
      fillColor = $[1,1,1]
      opacity = 0
      ori = 3.6*45
      pos [set every repeat] = [pos45_x,pos45_y]
      shape = rectangle
      size [set every repeat] = [stimHeight*2,stimHeight*2]
      startVal [time (s)] = 0.0
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    PolygonComponent pos50
      fillColor = $[1,1,1]
      opacity = 0
      ori = 3.6*50
      pos [set every repeat] = [pos50_x,pos50_y]
      shape = rectangle
      size [set every repeat] = [stimHeight*2,stimHeight*2]
      startVal [time (s)] = 0.0
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    PolygonComponent pos55
      fillColor = $[1,1,1]
      opacity = 0
      ori = 3.6*55
      pos [set every repeat] = [pos55_x,pos55_y]
      shape = rectangle
      size [set every repeat] = [stimHeight*2,stimHeight*2]
      startVal [time (s)] = 0.0
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    PolygonComponent pos60
      fillColor = $[1,1,1]
      opacity = 0
      ori = 3.6*60
      pos [set every repeat] = [pos60_x,pos60_y]
      shape = rectangle
      size [set every repeat] = [stimHeight*2,stimHeight*2]
      startVal [time (s)] = 0.0
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
  Routine instructions
    TextComponent textInstructions
      letterHeight [set every repeat] = $fontSize
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this experiment we will test your memory for the location of some colored rectangles.

        Try to remember where each rectangle is located.

        When the rectangles disappear a single colored circle will appear in the center of the screen.

        Click on the screen where you remember having seen a rectangle matching the color of the circle.

        Click any button to begin.
    MouseComponent mouseInstructions
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine testColors
    PolygonComponent probeCircle
      fillColor [set every repeat] = $testColorsColor
      lineColor [set every repeat] = $testColorsColor
      nVertices = 100
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = [fixSize*2,fixSize*2]
      startVal [time (s)] = 0.0
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    PolygonComponent testPos0
      fillColor [set every repeat] = $color0
      lineColor [set every repeat] = $color0
      ori = 0-90
      pos [set every repeat] = [pos0_x,pos0_y]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimWidth,stimHeight]
      startVal [time (s)] = 0.0
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    PolygonComponent testPos20
      fillColor [set every repeat] = $color1
      lineColor [set every repeat] = $color1
      ori = (100-20)*3.6-90
      pos [set every repeat] = [pos20_x,pos20_y]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimWidth,stimHeight]
      startVal [time (s)] = 0.0
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    PolygonComponent testPos40
      fillColor [set every repeat] = $color2
      lineColor [set every repeat] = $color2
      ori = (100-40)*3.6-90
      pos [set every repeat] = [pos40_x,pos40_y]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimWidth,stimHeight]
      startVal [time (s)] = 0.0
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    PolygonComponent testPos60
      fillColor [set every repeat] = $color3
      lineColor [set every repeat] = $color3
      ori = (100-60)*3.6-90
      pos [set every repeat] = [pos60_x,pos60_y]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimWidth,stimHeight]
      startVal [time (s)] = 0.0
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    PolygonComponent testPos80
      fillColor [set every repeat] = $color4
      lineColor [set every repeat] = $color4
      ori = (100-80)*3.6-90
      pos [set every repeat] = [pos80_x,pos80_y]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimWidth,stimHeight]
      startVal [time (s)] = 0.0
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    TextComponent testColorsExplained
      letterHeight [set every repeat] = $fontSize
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click the bar whose color matches the central circle.
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    MouseComponent mouseTestColors
      clickable = clickablePos0,clickablePos20,clickablePos40,clickablePos60,clickablePos80
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent clickablePos0
      fillColor = $[1,1,1]
      opacity = 0
      pos [set every repeat] = [pos0_x,pos0_y]
      shape = rectangle
      size [set every repeat] = [stimWidth*2,stimHeight*2]
      startVal [time (s)] = 0.0
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    PolygonComponent clickablePos20
      fillColor = $[1,1,1]
      opacity = 0
      ori = (100-20)*3.6-90
      pos [set every repeat] = [pos20_x,pos20_y]
      shape = rectangle
      size [set every repeat] = [stimWidth*2,stimHeight*2]
      startVal [time (s)] = 0.0
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    PolygonComponent clickablePos40
      fillColor = $[1,1,1]
      opacity = 0
      ori = (100-40)*3.6-90
      pos [set every repeat] = [pos40_x,pos40_y]
      shape = rectangle
      size [set every repeat] = [stimWidth*2,stimHeight*2]
      startVal [time (s)] = 0.0
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    PolygonComponent clickablePos60
      fillColor = $[1,1,1]
      opacity = 0
      ori = (100-60)*3.6-90
      pos [set every repeat] = [pos60_x,pos60_y]
      shape = rectangle
      size [set every repeat] = [stimWidth*2,stimHeight*2]
      startVal [time (s)] = 0.0
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    PolygonComponent clickablePos80
      fillColor = $[1,1,1]
      opacity = 0
      ori = (100-80)*3.6-90
      pos [set every repeat] = [pos80_x,pos80_y]
      shape = rectangle
      size [set every repeat] = [stimWidth*2,stimHeight*2]
      startVal [time (s)] = 0.0
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  Routine measureScreen
    PolygonComponent polygonMeasureScreen
      fillColor = $[1,1,1]
      nVertices = 90
      pos [set every repeat] = $(testLocX, testLocY)
      shape = rectangle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent mouseMeasureScreen
      clickable = polygonMeasureScreen
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent textMeasureScreen
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $testLocation
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        testCounter = 0
        testLocX = -1
        testLocY = 1
      Begin Routine:
        #if testCounter == 0:
        #    testLocX = -0.8
        #    testLocY = 0.5
        if testCounter == 0:
            testLocX = 1
            testLocY = 1
        if testCounter == 1:
            testLocX = 1
            testLocY = -1
        if testCounter == 2:
            testLocX = -1
            testLocY = -1
        if testCounter == 3:
            testLocX = 0
            testLocY = 0

        testCounter = testCounter + 1
  Routine test
    PolygonComponent polygon
      fillColor = $[1,1,1]
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine responseDemo
    CodeComponent ShowCursorDemo
      Code Type = Auto->JS
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    PolygonComponent respRingDemo
      fillColor = $[0,0,0]
      lineColor = $[-1.000,-1.000,-1.000]
      nVertices = 100
      shape = regular polygon...
      size [set every repeat] = [stimRadius*2,stimRadius*2]
      startVal [time (s)] = 0.0
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    PolygonComponent probeDemo
      fillColor [set every repeat] = $stim1_color
      lineColor [set every repeat] = $stim1_color
      nVertices = 100
      shape = regular polygon...
      size [set every repeat] = [fixSize*2,fixSize*2]
      startVal [time (s)] = 0.0
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    MouseComponent mouseResponseDemo
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent textDemo
      letterHeight [set every repeat] = $fontSize
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click on the ring where you remember having seen a bar whose color matches the color of the circle at screen center.
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    ImageComponent arrowImage
      image = images/arrow.png
      pos [set every repeat] = [stim1_x+0.025,stim1_y+0.025]
      size = (0.05, 0.05)
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator taskLoop loopType="TrialHandler"
    conditionsFile = parameterFiles/taskParameters.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    LoopInitiator testColorsLoop loopType="TrialHandler"
      Selected rows = 0:5
      conditionsFile = parameterFiles/testColorsSequence.xlsx
      loopType = sequential
      nReps = 1
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      Routine testColors
    LoopTerminator testColorsLoop
    Routine instructions
    LoopInitiator demoTrials loopType="TrialHandler"
      conditionsFile = parameterFiles/trialDemoSequence_forJS.xlsx
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine responseDemo
      Routine ITI
    LoopTerminator demoTrials
    LoopInitiator blockOfTrials loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 10
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      Routine startBlock
      Routine fixPrepare
      LoopInitiator trials loopType="TrialHandler"
        Selected rows = $currentBlockRows
        conditionsFile = parameterFiles/trialSequence_forJS.xlsx
        loopType = sequential
        nReps = 1
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        Routine trial
        Routine response
        Routine ITI
      LoopTerminator trials
    LoopTerminator blockOfTrials
  LoopTerminator taskLoop
